PsychoPy2experiment version="2020.2.5"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = MASTERTASK
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Routines
  Routine discounting
    TextComponent smaller
      letterHeight = 0.08
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $SS
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    TextComponent larger
      letterHeight = 0.08
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $LL
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    TextComponent sdelay
      letterHeight = 0.08
      pos = (-0.3, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $STIME
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    TextComponent ldelay
      letterHeight = 0.08
      pos = (0.3, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $LTIME
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    KeyboardComponent key_resp_2
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine ITI
    TextComponent interval
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = 0
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  Routine break_2
    TextComponent breaktext
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Take a break!

        Press space to continue.
    KeyboardComponent key_resp_3
      allowedKeys = 'space','y'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        trialCount = 0
      Begin Routine:
        trialCount = trialCount + 1
      Each Frame:
        if trialCount == 0 or trialCount == 160 or trialCount%40 != 0:
            continueRoutine = False
  Routine PRACTICE
    TextComponent one_p
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text = 1
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    TextComponent two_p
      letterHeight = 0.1
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.1
      text = 2
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    TextComponent three_p
      letterHeight = 0.1
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 0.1
      text = 3
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    TextComponent four_p
      letterHeight = 0.1
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 0.1
      text = 4
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    TextComponent five_p
      letterHeight = 0.1
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 0.1
      text = 5
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    TextComponent six_p
      letterHeight = 0.1
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 0.1
      text = 6
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    TextComponent seven_p
      letterHeight = 0.1
      startVal [time (s)] = 6.0
      stopVal [duration (s)] = 0.1
      text = 7
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    TextComponent eight_p
      letterHeight = 0.1
      startVal [time (s)] = 7.0
      stopVal [duration (s)] = 0.1
      text = 8
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    TextComponent nine_p
      letterHeight = 0.1
      startVal [time (s)] = 8.0
      stopVal [duration (s)] = 0.1
      text = 9
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    TextComponent ten_p
      letterHeight = 0.1
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 0.1
      text = 10
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    TextComponent blank_p
      letterHeight = 0.1
      startVal [time (s)] = 10.0
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    KeyboardComponent key_resp_9
      allowedKeys = 'space','n'
      forceEndRoutine = True
      startVal [time (s)] = 10.0
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  Routine instrvolle1
    TextComponent instrtext
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        For this trial, you will count to

        We will count with you until 10

        Please continue counting in your head at the same pace and press the spacebar once you reach the target number.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent begintext
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press the spacebar to begin
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    TextComponent endnumber
      letterHeight = 0.06
      pos = (0, 0.147)
      startVal [time (s)] = 0.0
      text [set every repeat] = $s1
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  Routine volletrials1
  Routine vollept1
    TextComponent one
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text = 1
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    TextComponent two
      letterHeight = 0.1
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.1
      text = 2
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    TextComponent three
      letterHeight = 0.1
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 0.1
      text = 3
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    TextComponent four
      letterHeight = 0.1
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 0.1
      text = 4
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    TextComponent five
      letterHeight = 0.1
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 0.1
      text = 5
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    TextComponent six
      letterHeight = 0.1
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 0.1
      text = 6
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    TextComponent seven
      letterHeight = 0.1
      startVal [time (s)] = 6.0
      stopVal [duration (s)] = 0.1
      text = 7
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    TextComponent eight
      letterHeight = 0.1
      startVal [time (s)] = 7.0
      stopVal [duration (s)] = 0.1
      text = 8
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    TextComponent nine
      letterHeight = 0.1
      startVal [time (s)] = 8.0
      stopVal [duration (s)] = 0.1
      text = 9
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    TextComponent ten
      letterHeight = 0.1
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 0.1
      text = 10
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    TextComponent blank
      letterHeight = 0.1
      startVal [time (s)] = 10
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    KeyboardComponent key_resp_5
      allowedKeys = 'space','y'
      forceEndRoutine = True
      startVal [time (s)] = 10.0
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  Routine vollept2
    TextComponent one_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text = 1
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    TextComponent two_2
      letterHeight = 0.1
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 0.1
      text = 2
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    TextComponent three_2
      letterHeight = 0.1
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 0.1
      text = 3
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    TextComponent four_2
      letterHeight = 0.1
      startVal [time (s)] = 6
      stopVal [duration (s)] = 0.1
      text = 4
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    TextComponent five_2
      letterHeight = 0.1
      startVal [time (s)] = 8.0
      stopVal [duration (s)] = 0.1
      text = 5
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    TextComponent six_2
      letterHeight = 0.1
      startVal [time (s)] = 10
      stopVal [duration (s)] = 0.1
      text = 6
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    TextComponent seven_2
      letterHeight = 0.1
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.1
      text = 7
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    TextComponent eight_2
      letterHeight = 0.1
      startVal [time (s)] = 14
      stopVal [duration (s)] = 0.1
      text = 8
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    TextComponent nine_2
      letterHeight = 0.1
      startVal [time (s)] = 16.0
      stopVal [duration (s)] = 0.1
      text = 9
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    TextComponent ten_2
      letterHeight = 0.1
      startVal [time (s)] = 18.0
      stopVal [duration (s)] = 0.1
      text = 10
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    TextComponent blank_2
      letterHeight = 0.1
      startVal [time (s)] = 20
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    KeyboardComponent key_resp_7
      allowedKeys = 'space','j'
      forceEndRoutine = True
      startVal [time (s)] = 20
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  Routine instrvolle2
    TextComponent instrtext2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        For this trial, you will count to

        We will count with you until 10

        Please continue counting in your head at the same pace and press the spacebar once you reach the target number.
    KeyboardComponent key_resp_6
      allowedKeys = 'space','y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent endnumber2
      letterHeight = 0.06
      pos = (0, 0.147)
      startVal [time (s)] = 0.0
      text [set every repeat] = $s2
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    TextComponent begintext2
      letterHeight = 0.04
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press the spacebar to begin
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  Routine ZAUBTRIALS
    SliderComponent slider
      forceEndRoutine = False
      granularity = 0
      size = (1.2, 0.06)
      startVal [time (s)] = 0.0
      styles = ['slider']
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    KeyboardComponent next_trial
      allowedKeys = 'space','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        How long do you consider the duration between today and a day

        from now?
    TextComponent timetext
      letterHeight = 0.05
      pos = (0, 0.27)
      startVal [time (s)] = 0.0
      text [set every repeat] = $estimatedurations
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    TextComponent nexttrial
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press the spacebar to continue.
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    TextComponent veryshort
      letterHeight = 0.03
      pos = (-0.6, -0.1)
      startVal [time (s)] = 0.0
      text = Very short
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    TextComponent verylong
      letterHeight = 0.03
      pos = (0.6, -0.1)
      startVal [time (s)] = 0.0
      text = Very long
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  Routine WELCOME
    TextComponent text
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        This part of the study will consist of three behavioral tasks, and will take approximately 15-20 minutes in total.
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_6
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press any key to continue
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  Routine DISCINSTR1
    TextComponent text_4
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        For this first task, we are interested in understanding how individuals discount the value of a reward over time.

        This part will take approximately 8-10 minutes.
    TextComponent text_5
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press any key to continue
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    KeyboardComponent key_resp_10
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine DISCINSTR2
    TextComponent text_7
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        In this task, you will choose between two hypothetical amounts of money to receive.

        There are no right answers, simply indicate which option you would prefer to receive.
    TextComponent text_8
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press any key to continue
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    KeyboardComponent key_resp_11
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine DISCINSTR3
    TextComponent text_9
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text = All of these choices are hypothetical, but please make each choice as though you were actually going to receive the option you choose. 
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    TextComponent text_10
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press any key to continue
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    KeyboardComponent key_resp_12
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine DISCINSTR4
    TextComponent text_11
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text = Use the left and right arrow keys to indicate your choice. 
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    TextComponent text_12
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press the spacebar when you are ready to begin
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    KeyboardComponent key_resp_13
      allowedKeys = 'space','p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine VOLLEINSTR1
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the next task!

        For this task, we are interested in understanding how we form our internal representations of time.

        This part will take approximately 5-7 minutes.
    KeyboardComponent key_resp_8
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_13
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press any key to continue
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  Routine VOLLEINSTR2
    TextComponent text_14
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        For this task, you will be asked to count in synchrony with the computer for a few seconds, and then to continue counting until you reach the specified number for each trial.

        At the beginning of each trial, we will count with you until “10” by flashing numbers on the screen.
    KeyboardComponent key_resp_14
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_15
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press any key to continue
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  Routine VOLLEINSTR3
    TextComponent text_16
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        After we reach “10”, please continue to count silently in your head and press the spacebar whenever you reach the target number (indicated at the start of each trial).
    TextComponent text_17
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press any key to continue
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    KeyboardComponent key_resp_15
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine VOLLEPRACTICEINSTR
    TextComponent text_18
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Let’s practice this once

        For this practice trial, you will count to 15.

        We will count with you until 10

        Please continue counting in your head at the same pace and press the spacebar once you reach the target number.
    KeyboardComponent key_resp_16
      allowedKeys = 'space','z'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_19
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press the spacebar to begin
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  Routine INTROPT2
    TextComponent text_20
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now we will begin part 2 of this task.

        You will continue to count to a target number for each trial, but we will be counting at a slightly different pace.
    KeyboardComponent key_resp_17
      allowedKeys = 'space','r'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_21
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press the spacebar to begin
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  Routine ZAUBINSTR1
    TextComponent text_22
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have reached the final task!

        For this part, we are interested in understanding how people think about future time intervals.

        This section will take approximately 3-5 minutes to complete.
    TextComponent text_23
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press any key to continue
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    KeyboardComponent key_resp_18
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ZAUBINSTR2
    TextComponent text_24
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = For this task, you will be asked to imagine a day at some point in the future, ranging from 2 weeks to 10 years from today. You will then respond by indicating how long you think the duration is between today and the specified time.
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    TextComponent text_25
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press any key to continue
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    KeyboardComponent key_resp_19
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ZAUBINSTR3
    TextComponent text_26
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        For each trial, please indicate how long you perceive the duration of time that is presented by placing a marker on a line ranging from “very short” to “very long”.
    TextComponent text_27
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press any key to continue
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    KeyboardComponent key_resp_20
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ZAUBINSTR4
    TextComponent text_28
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        There are no right or wrong answers, we just want to know how long these intervals feel to you.

        Once you are satisfied with where you have placed the marker, press the spacebar to continue.
    TextComponent text_29
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press the spacebar to begin
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    KeyboardComponent key_resp_21
      allowedKeys = 'space','o'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine THANKYOU
    TextComponent text_30
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
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      text:
        You have reached the end of this part of the study!

        You should be automatically redirected to qualtrics once you click “okay”

        If you are not redirected, simply click on the original survey link from your email and finish the questionnaires on Qualtrics.
    TextComponent text_31
      letterHeight = 0.1
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      text = Thank you!
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Flow
  Routine WELCOME
  Routine DISCINSTR1
  Routine DISCINSTR2
  Routine DISCINSTR3
  Routine DISCINSTR4
  LoopInitiator discounting_trials loopType="TrialHandler"
    conditionsFile = finaldisctrials.csv
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('SS', 32.08), ('LL', 32.41), ('STIME', 'today'), ('LTIME', 'in 2 weeks')]),
      OrderedDict([('SS', 29.11), ('LL', 29.87), ('STIME', 'today'), ('LTIME', 'in 2 weeks')]),
      OrderedDict([('SS', 15.39), ('LL', 16.16), ('STIME', 'today'), ('LTIME', 'in 2 weeks')]),
      OrderedDict([('SS', 35.35), ('LL', 38.89), ('STIME', 'today'), ('LTIME', 'in 2 weeks')]),
      OrderedDict([('SS', 84.89), ('LL', 97.62), ('STIME', 'today'), ('LTIME', 'in 2 weeks')]),
      OrderedDict([('SS', 53.13), ('LL', 63.75), ('STIME', 'today'), ('LTIME', 'in 2 weeks')]),
      OrderedDict([('SS', 39.22), ('LL', 49.03), ('STIME', 'today'), ('LTIME', 'in 2 weeks')]),
      OrderedDict([('SS', 69.06), ('LL', 93.23), ('STIME', 'today'), ('LTIME', 'in 2 weeks')]),
      OrderedDict([('SS', 31.26), ('LL', 46.89), ('STIME', 'today'), ('LTIME', 'in 2 weeks')]),
      OrderedDict([('SS', 47.35), ('LL', 82.86), ('STIME', 'today'), ('LTIME', 'in 2 weeks')]),
      OrderedDict([('SS', 63.72), ('LL', 64.36), ('STIME', 'today'), ('LTIME', 'in 1 month')]),
      OrderedDict([('SS', 47.52), ('LL', 48.95), ('STIME', 'today'), ('LTIME', 'in 1 month')]),
      OrderedDict([('SS', 32.29), ('LL', 33.89), ('STIME', 'today'), ('LTIME', 'in 1 month')]),
      OrderedDict([('SS', 56.53), ('LL', 62.18), ('STIME', 'today'), ('LTIME', 'in 1 month')]),
      OrderedDict([('SS', 17.83), ('LL', 20.51), ('STIME', 'today'), ('LTIME', 'in 1 month')]),
      OrderedDict([('SS', 78.86), ('LL', 94.63), ('STIME', 'today'), ('LTIME', 'in 1 month')]),
      OrderedDict([('SS', 83.59), ('LL', 104.49), ('STIME', 'today'), ('LTIME', 'in 1 month')])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
    Routine discounting
    Routine ITI
    Routine break_2
  LoopTerminator discounting_trials
  Routine VOLLEINSTR1
  Routine VOLLEINSTR2
  Routine VOLLEINSTR3
  Routine VOLLEPRACTICEINSTR
  Routine PRACTICE
  LoopInitiator volle1trials loopType="TrialHandler"
    conditionsFile = stimcon_final copy.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('s1', 20), ('s2', 15)]),
      OrderedDict([('s1', 30), ('s2', 20)]),
      OrderedDict([('s1', 40), ('s2', 25)]),
      OrderedDict([('s1', 50), ('s2', 30)])]
    Routine instrvolle1
    Routine vollept1
  LoopTerminator volle1trials
  Routine INTROPT2
  LoopInitiator volle2trials loopType="TrialHandler"
    conditionsFile = stimcon_final copy.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('s1', 20), ('s2', 15)]),
      OrderedDict([('s1', 30), ('s2', 20)]),
      OrderedDict([('s1', 40), ('s2', 25)]),
      OrderedDict([('s1', 50), ('s2', 30)])]
    Routine instrvolle2
    Routine vollept2
  LoopTerminator volle2trials
  Routine ZAUBINSTR1
  Routine ZAUBINSTR2
  Routine ZAUBINSTR3
  Routine ZAUBINSTR4
  LoopInitiator ztrials loopType="TrialHandler"
    conditionsFile = TIMEESTIMATIONPARAMETERS copy.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('estimatedurations', '2 weeks')]),
      OrderedDict([('estimatedurations', '1 month')]),
      OrderedDict([('estimatedurations', '2 months')]),
      OrderedDict([('estimatedurations', '3 months')]),
      OrderedDict([('estimatedurations', '6 months')]),
      OrderedDict([('estimatedurations', '9 months')]),
      OrderedDict([('estimatedurations', '1 year')]),
      OrderedDict([('estimatedurations', '1.5 years')]),
      OrderedDict([('estimatedurations', '2 years')]),
      OrderedDict([('estimatedurations', '5 years')]),
      OrderedDict([('estimatedurations', '10 years')])]
    Routine ZAUBTRIALS
  LoopTerminator ztrials
  Routine THANKYOU
